# Main structure of the experiment profile
experiment_profile_name: <string>  # Name of the experiment profile


# Metadata (optional)
metadata:
  author: <string>
  description: <string>

# Plugins (optional)
plugins:
  - name: <string>
    version: <string>  # version or constraint, e.g. "1.2.3" or ">=1.2.3"

# Inputs available to expressions (optional)
inputs:
  <input_name>: <value>


# Jobs common to all Pioreactors (optional)
common:
  jobs:
    <job_name>:
      description: <string>
      actions:
        - # see Action definitions below

# Jobs per Pioreactor (optional)
pioreactors:
  <pioreactor_unit_name>:
    label: <string>
    jobs:
      <job_name>:
        description: <string>
        actions:
          - # see Action definitions below


# Action definitions
- type: log
  hours_elapsed: <float>
  if: <bool_or_expression>
  options:
    message: <string>
    level: DEBUG|debug|WARNING|warning|INFO|info|NOTICE|notice|ERROR|error (default: notice)

- type: start
  hours_elapsed: <float>
  if: <bool_or_expression>
  options: {<option_name>: <value>}  # expressions allowed via ${{ }}
  args: [<string>, ...]
  config_overrides: {<config_name>: <value>}

- type: update
  hours_elapsed: <float>
  if: <bool_or_expression>
  options: {<option_name>: <value>}  # expressions allowed via ${{ }}

- type: pause
  hours_elapsed: <float>
  if: <bool_or_expression>

- type: resume
  hours_elapsed: <float>
  if: <bool_or_expression>

- type: stop
  hours_elapsed: <float>
  if: <bool_or_expression>

- type: repeat
  hours_elapsed: <float>
  if: <bool_or_expression>
  repeat_every_hours: <float>  # default: 1.0
  while: <bool_or_expression>  # optional stop condition
  max_hours: <float>           # optional cap on total hours
  actions:
    - # basic action only (log, start, pause, resume, stop, update)

- type: when
  hours_elapsed: <float>
  if: <bool_or_expression>
  condition: <bool_or_expression>
  actions:
    - # any action (including repeat/when)


# Profile expression syntax (used in ${{ ... }} in options/conditions)
#
# Literals
# - Numbers: integer or float (e.g., 1, -2.5)
# - Booleans: true, false (case-insensitive)
# - Names resolve to values provided in the expression environment (inputs, etc.); otherwise they remain strings.
#
# Operators
# - Arithmetic: +, -, *, / (raises on division by zero), ** (exponent)
# - Comparisons: <, <=, ==, >=, >
# - Logical: and, or, not
# - Parentheses for precedence
#
# Functions
# - random(): float in [0,1)
# - unit(): current unit name
# - hours_elapsed(): current action time
# - experiment(): current experiment name
# - job_name(): current job name
#
# MQTT lookups
# - <unit>:<job>:<setting>[.<nested_key>]*
# - ::<job>:<setting>[.<nested_key>]* (uses current unit)
#   Examples: unit():od_reading:od600, ::stirring:setting.target_rpm
#   Fails if worker is inactive or topic missing.
#
# Conversion rules
# - Numeric strings become floats; "true"/"false" become booleans; otherwise strings stay strings.
